PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lab experiment 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = E:/BACKUP NEVER DELETE THIS FOLDER/Downloads/Study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'flower'},
      {'study_word': 'tractor'},
      {'study_word': 'pink'},
      {'study_word': 'neon'},
      {'study_word': 'work'},
      {'study_word': 'emotions'},
      {'study_word': 'career'},
      {'study_word': 'life'},
      {'study_word': 'love'},
      {'study_word': 'heart'},
      {'study_word': 'break'},
      {'study_word': 'space'},
      {'study_word': 'fit'},
      {'study_word': 'light'},
      {'study_word': 'blink'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'b_i_k', 'reference': 'blink', 'old_new': 'old'},
      {'test': 'b_e_k', 'reference': 'break', 'old_new': 'old'},
      {'test': 'c_re_r', 'reference': 'career', 'old_new': 'old'},
      {'test': 'e_ot_o_s', 'reference': 'emotions', 'old_new': 'old'},
      {'test': 'fi_', 'reference': 'fit', 'old_new': 'old'},
      {'test': 'f_ow_r', 'reference': 'flower', 'old_new': 'old'},
      {'test': 'h_a_t', 'reference': 'heart', 'old_new': 'old'},
      {'test': '_i_e', 'reference': 'life', 'old_new': 'old'},
      {'test': 'l_g_t', 'reference': 'light', 'old_new': 'old'},
      {'test': '_o_e', 'reference': 'love', 'old_new': 'old'},
      {'test': 'n_o_', 'reference': 'neon', 'old_new': 'old'},
      {'test': '_i_k', 'reference': 'pink', 'old_new': 'old'},
      {'test': 'sp_c_', 'reference': 'space', 'old_new': 'old'},
      {'test': 't_a_t_r', 'reference': 'tractor', 'old_new': 'old'},
      {'test': 'w_r_', 'reference': 'work', 'old_new': 'old'},
      {'test': 'b_la_nc_', 'reference': 'balance', 'old_new': 'new'},
      {'test': 'f_g_re_', 'reference': 'figures', 'old_new': 'new'},
      {'test': 'r_m_n_e', 'reference': 'romance', 'old_new': 'new'},
      {'test': '_a_', 'reference': 'lab', 'old_new': 'new'},
      {'test': 'b_o_', 'reference': 'book', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
